PsychoPy2experiment version="1.90.3"
Settings
  Monitor = Real_Monitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = Gradual_Change_fader
  Screen = 2
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Routines
  Routine b'Task_Start_2'
    TextComponent Task_Start_Instruc
      color = $[-1.000,-1.000,-1.000]
      text = The actual trials will now begin. Note that the changes in these scenes will not be outlined in red. You will have to find them on your own! Also, some of the scenes do not have changes in them so be sure to press the spacebar only if you see a change. Finally, there will be a 15 second time limit for detecting the change in each scene. Good luck! Press the spacebar when you are ready to begin!
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    ImageComponent Image1
      stopVal [duration (s)] = $nochangetime + changetime + extratime
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $image1_name
      size = (1024, 768)
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    ImageComponent Image2
      opacity [set every frame] = visibility
      stopVal [duration (s)] = $nochangetime + changetime + extratime
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $image2_name
      size = (1024, 768)
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    CodeComponent code
      Begin Routine:
        visibility = 0
        extratime = 1
      Each Frame:
        if t < nochangetime:
             visibility = 0
        if t > nochangetime:
            sinraw = sin(t*1.5)
            visibility = (sinraw+1)/2

        if t > nochangetime + changetime:
            visibility = 0

        if visibility < 0:
            visibility = 0


        if Image2.status == FINISHED:
            continueRoutine = False

        if key_resp_1.keys == 'space':
            extratime = 999
    TextComponent Trial_type
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $nochangetime + changetime
      pos = (0, -.90)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      stopVal [duration (s)] = $nochangetime + changetime + extratime
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Changedetected
      opacity [set every frame] = 1
      wrapWidth = 100
      color = $[-1.000,-1.000,-1.000]
      text = Click on where the change is! or (outside the image if there is no change)
      pos = (0, 0.9)
      startVal [condition] = key_resp_1.keys == 'space'
      letterHeight = 0.05
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    MouseComponent Mouse_Click_Location
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [condition] = $Changedetected.status == STARTED
      saveMouseState = on click
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  Routine Task_Start
    CodeComponent ImageArrayInitializer
      Begin Experiment:
        changetime = 12
        nochangetime = 3.14

        imagenumarray =['0001','0002','0004','0005','0006','0008','0009','0011','0014','0016','0018','0019','0022','0023','0024','0028','0029','0031','0038','0039','0040','0041','0044','0045','0048','0049','0050','0051','0052','0054','0055','0056','0058','0060','0066','0067','0069','0070','0071','0074','0075','0076','0078','0079','0080','0084','0087','0089','0093','0097','0098','0099','0100','0102','0106','0107','0109','0110','0111','0112','0114','0116','0117','0118','0119','0122','0123','0124','0125','0126','0127','0128']
        shuffle(imagenumarray)
    TextComponent Task_Instructions
      color = $[-1.000,-1.000,-1.000]
      text = In this task you will be presented with photographs of various scenes. In some of these scenes, a specific object in the scene may periodically appear or disappear several times in a row. Your task is to press the 'spacebar' key AS SOON AS you see such a change occuring. After making that response, you will be asked to left-click on where the change occured with the mouse. Do remember to press the spacebar AS SOON as you actually see the change though as that response is what will determine your score! It is not important to click on the location quickly but it is important to press the spacebar as soon as you see a change. Press the spacebar to see a few examples of these changes.
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent Start_Task
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Task_End
    TextComponent End_task_instructions
      color = $[-1.000,-1.000,-1.000]
      text = Good job! You have completed this task. Please contact the experimenter for further instructions.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent Task_Ender
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI
    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      text = +
      stopVal [duration (s)] = $ISI_Dur
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent ISI_Dur
      Begin Routine:
        ISI_Dur = 1 + random()*1

        trials.addData('ISI_Dur', ISI_Dur)
    TextComponent text_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Examples
    ImageComponent ExampleImage1
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Image_1
      size = (1024, 768)
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    ImageComponent ExampleImage2
      opacity [set every frame] = visibility
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Image_2
      size = (1024, 768)
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    CodeComponent code_2
      Begin Routine:
        visibility = 0
        extratime = 999
      Each Frame:
        if t < 3:
             visibility = 0
        if t > 3:
             sinraw = sin(t*1.5)
             visibility = (sinraw+1)/2


        if visibility < 0:
            visibility = 0
    KeyboardComponent key_resp_2
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = first key
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [condition] = $text_4.status == STARTED
      saveMouseState = on click
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    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      text = Click on where the change is! or (outside the image if there is no change)
      pos = (0, 0.9)
      startVal [condition] = key_resp_2.keys == 'space'
      letterHeight = 0.05
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    TextComponent text_5
      color = $[-1.000,-1.000,-1.000]
      text = Press the Spacebar when you see changes like this! Try it now.
      pos = (0, -.90)
      startVal [time (s)] = 5
      letterHeight = 0.05
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  Routine trial_initalizer
    CodeComponent Image_Picker
      Begin Routine:
        if random() <= 0.5:
            change_side = 'L'
        else :
            change_side = 'R'

        trialcode = randint(1,4)

        if trialcode == 1:
            firstimage = 'p'
            secondimage = 'a'
            trialtype = 'disappear'
        if trialcode == 2:
            firstimage = 'a'
            secondimage = 'p'
            trialtype = 'appear'
        if trialcode == 3:
            firstimage = 'p'
            secondimage = 'p'
            trialtype = 'a_nochange'



        image1_name = 'Images\\' +imagenumarray[trials.thisN]+change_side+firstimage+'.jpg'
        image2_name ='Images\\'  +imagenumarray[trials.thisN]+change_side+secondimage+'.jpg'


        trials.addData('trialtype', trialtype)
        trials.addData('change_side', change_side)
        trials.addData('Imagenumber', imagenumarray[trials.thisN])
  Routine Get_ready
    TextComponent text_3
      color = black
      text = Get ready for the actual trials!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Task_Start
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Examples.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Image_1', u'Example1.jpg'), ('Image_2', u'Example2.jpg')]),
      OrderedDict([('Image_1', u'Example3.jpg'), ('Image_2', u'Example4.jpg')]),
      OrderedDict([('Image_1', u'Example5.jpg'), ('Image_2', u'Example6.jpg')])]
    Routine Examples
  LoopTerminator trials_2
  Routine Get_ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(imagenumarray)
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    Routine trial_initalizer
    Routine Trial
    Routine ISI
  LoopTerminator trials
  Routine Task_End
