PsychoPy2experiment version="1.90.3"
Settings
  Monitor = Real_Monitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = PY2_shuffler_SSD_arrow_variant_ISI_staircase
  Screen = 2
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Routines
  Routine Block_Initializer
    CodeComponent Array_creator
      Begin Routine:
        goarray = ['GO'] * NGo_Trials
        stoparray = ['STOP'] * NSSD_Trials
        trialarray = goarray + stoparray
        shuffle(trialarray)
        totaltrialnumber = len(trialarray)
        trialnum = 0

        thisExp.addData('clocktime',clock.getTime())
    TextComponent BlockInstructions
      text [set every repeat] = $Block_Instructions
      stopVal [duration (s)] = $Block_Instructions_dur
      durationEstim = 27
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Get_Ready
      text = Get Ready!
      stopVal [duration (s)] = 0.5
      durationEstim = 3
      startVal [time (s)] = $Block_Instructions_dur
      letterHeight = 0.1
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  Routine feedback
    CodeComponent Feedback_Code
      Begin Routine:
        if trial_type == 'GO' and GO_SST_RESP.keys == 'slash' :
            FeedbackPos1 = (0,0)
            FeedbackPos2 = (0,0)
            Feedbackmsg1 = ''
            Feedbackmsg2 = ''
            Sign_present = 0
            continueRoutine = False

        if trial_type == 'GO' and GO_SST_RESP.keys == 'z' :
            FeedbackPos1 = (0,0)
            FeedbackPos2 = (0,0)
            Feedbackmsg1 = ''
            Feedbackmsg2 = ''
            Sign_present = 0
            continueRoutine = False

        if trial_type == 'STOP' and STOP_SST_RESP.corr == 1:
            trials.addData('STOPfeedbackran', 'No')
            FeedbackPos1 = (0,0)
            FeedbackPos2 = (0,0)
            Feedbackmsg1 = ''
            Feedbackmsg2 = ''
            Sign_present = 0
            SSD_SOA_Frames = SSD_SOA_Frames + 3
            continueRoutine = False

        if trial_type == 'GO' and GO_SST_RESP.keys == None :
            Go_too_slow_N = Go_too_slow_N +1
            FeedbackPos1 = (0,0)
            Feedbackmsg2 = 'Faster'
            FeedbackPos2 = (0, -.1)
            Sign_present = 0
            trials.addData('GoFeedbackDur_frames', FeedbackDur_frames)

        if trial_type == 'STOP' and STOP_SST_RESP.corr == 0:
            trials.addData('STOPfeedbackran', 'Yes')
            FeedbackPos1 = (0,0.2)
            Feedbackmsg2 = ''
            FeedbackPos2 = (0, -.1)
            Sign_present = 1
            SSD_SOA_Frames = SSD_SOA_Frames - 3
            trials.addData('Stop_feedback_Frames', FeedbackDur_frames)

        ISI_dur = ISI_min_frames+ random()*(ISI_max_frames - ISI_min_frames)
        trials.addData('ISI_duration', ISI_dur)

        if Go_too_slow_N == 3:
            Go_too_slow_N = 0
            trialarray.append('GO')
            shuffle(trialarray)
            totaltrialnumber = totaltrialnumber+1
    TextComponent Feedback
      color [set every repeat] = $Feedback_Color
      text [set every repeat] = X
      stopVal [duration (frames)] = $FeedbackDur_frames
      pos [set every repeat] = FeedbackPos1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent FeedbackLine2
      color [set every repeat] = $Feedback_Color
      text [set every repeat] = $Feedbackmsg2
      stopVal [duration (frames)] = $FeedbackDur_frames
      pos [set every repeat] = FeedbackPos2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent StopSign_Feedback
      opacity [set every repeat] = Sign_present
      stopVal [duration (frames)] = $FeedbackDur_frames
      units = deg
      startVal [time (s)] = 0.0
      image = Stop_Sign.png
      size = (1.75, 1.75)
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  Routine trial
    CodeComponent Trial_Code
      Begin Routine:
        if random() <= 0.5:
            Arrow_ori = -90
            corr_response = 'z'

        else :
            Arrow_ori = 90
            corr_response= 'slash'

        if trial_type == 'STOP':
            corr_response = 'None'

        trials.addData('corr_response', corr_response)
      Each Frame:
        if GO_SST_RESP.status == FINISHED:
            continueRoutine = False

        if STOP_SST_RESP.status == FINISHED:
            continueRoutine = False
    PolygonComponent fixation
      shape = cross
      startVal [time (s)] = 0.0
      size [set every repeat] = (fixation_degrees, fixation_degrees)
      fillColor = $[1,1,1]
      units = deg
      stopVal [duration (frames)] = fixation_min_frames+ random()*(fixation_max_frames - fixation_min_frames)
      durationEstim = 1.1
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    ImageComponent StopSign
      stopVal [duration (frames)] = $Trial_SSD_Frames_Dur
      units = deg
      startVal [condition] = $trial_type == 'STOP' and Go_arrow.status == FINISHED
      image = Stop_Sign.png
      size [set every repeat] = (Stop_stim_degrees, Stop_stim_degrees)
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    KeyboardComponent GO_SST_RESP
      correctAns = $corr_response
      storeCorrect = True
      stopVal [duration (frames)] = $Trial_Go_Frames_Dur + Trial_SSD_Frames_Dur
      forceEndRoutine = False
      allowedKeys = 'z','slash'
      startVal [condition] = $trial_type == 'GO'and fixation.status == FINISHED
      store = first key
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    KeyboardComponent STOP_SST_RESP
      correctAns = $corr_response
      storeCorrect = True
      stopVal [duration (frames)] = $Trial_Go_Frames_Dur + Trial_SSD_Frames_Dur
      forceEndRoutine = True
      allowedKeys = 'z','slash'
      startVal [condition] = trial_type == 'STOP' and fixation.status == FINISHED
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    ImageComponent Go_arrow
      stopVal [duration (frames)] = $Trial_Go_Frames_Dur
      units = deg
      ori [set every repeat] = Arrow_ori
      startVal [condition] = $fixation.status == FINISHED
      image = Arrow.png
      size [set every repeat] = (go_size_degrees,go_size_degrees)
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  Routine End_Instructions
    TextComponent Task_End_Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        You have completed this task!

        Please inform the experimenter
    KeyboardComponent Task_End_Response
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Clock_Code
      Begin Routine:
        thisExp.addData('clocktime',clock.getTime())
  Routine Trial_initalizer
    CodeComponent Trial_Creator
      Begin Routine:
        #Initializes specific trial parameter values based on trial type.
        #Currently set to output more data than necessary for debugging.

        if trialarray[0] == 'GO':
            trial_type = 'GO'
            Trial_SSD_Frames_Dur = 0
            Trial_Go_Frames_Dur = Go_Frames_Dur - Trial_SSD_Frames_Dur
            trials.addData('trial_type', trial_type)
            trials.addData('SSD_SOA_Frames', SSD_SOA_Frames)
            trials.addData('fixation_min_frames', fixation_min_frames)
            trials.addData('fixation_max_frames', fixation_max_frames)
            trials.addData('Trial_SSD_Frames_Dur', Trial_SSD_Frames_Dur)
            trials.addData('Trial_Go_Frames_Dur', Trial_Go_Frames_Dur)
            trials.addData('NGo_Trials', NGo_Trials)
            trials.addData('NSSD_Trials', NSSD_Trials)

        if trialarray[0] == 'STOP':
            trial_type = 'STOP'
            Trial_SSD_Frames_Dur = Go_Frames_Dur - SSD_SOA_Frames
            Trial_Go_Frames_Dur = Go_Frames_Dur - Trial_SSD_Frames_Dur
            trials.addData('trial_type', trial_type)
            trials.addData('SSD_SOA_Frames', SSD_SOA_Frames)
            trials.addData('fixation_min_frames', fixation_min_frames)
            trials.addData('fixation_max_frames', fixation_max_frames)
            trials.addData('Trial_SSD_Frames_Dur', Trial_SSD_Frames_Dur)
            trials.addData('Trial_Go_Frames_Dur', Trial_Go_Frames_Dur)
            trials.addData('NGo_Trials', NGo_Trials)
            trials.addData('NSSD_Trials', NSSD_Trials)

        trialarray.pop(0)
      End Routine:
        trialnum = trialnum + 1
  Routine Start_Instructions
    TextComponent Task_Start_Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Thank you for participating in this experiment!

        In the upcoming task you will be presented with a series of green arrows, each facing to the right or to the left. Your task is to respond as quickly and as accurately as possible to these stimuli by pressing the "z" key for arrows facing to your left and the "/" (slash) key for arrows facing to your right. Please place your left and right index fingers on each respective key. The slash key is on the same row as the Z key.

        Occasionally, an arrow will be followed by a red stop sign. If you see such a sign, your task is to NOT respond on that trial (i.e. do not press the z or / key on that trial). On some trials, these signs will be presented soon after the arrow, making it easy to stop your response. On other trials, the sign will be presented late, making it very difficult to stop your response.

        Nevertheless, it is important that you DO NOT WAIT for a stop signal to occur. Feedback will be provided to you if you take too long to respond to a specific trial.

        Press the "/" key to continue.
    KeyboardComponent Task_Start_Resp
      forceEndRoutine = True
      allowedKeys = 'slash'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Experiment_Initializer
      Begin Experiment:
        #testing_stimuli_parameters
        #Go_stimuli_ms = 16
        #Initial_SSD_SOA_ms = 16
        #fixation_min_ms = 16
        #fixation_max_ms = 16
        #FeedbackDur_ms = 16
        #fixation_degrees = 1.5
        #go_size_degrees = 1.75
        #Stop_stim_degrees = 1.75
        #Feedback_Color = 'red'
        #ISI_min_ms = 16
        #ISI_max_ms = 16

        #task_stimuli_parameters
        Go_stimuli_ms = 650
        Initial_SSD_SOA_ms = 200
        fixation_min_ms = 250
        fixation_max_ms = 750
        FeedbackDur_ms = 1500
        fixation_degrees = 1.5
        go_size_degrees = 1.75
        Stop_stim_degrees = 1.75
        Feedback_Color = 'red'
        ISI_min_ms = 1000
        ISI_max_ms = 1400





        #conversions to frames and misc intializations
        Go_too_slow_N = 0
        Go_Frames_Dur = round(Go_stimuli_ms/(1000/expInfo['frameRate']),0)
        SSD_SOA_Frames = round(Initial_SSD_SOA_ms/(1000/expInfo['frameRate']),0)
        fixation_min_frames = round(fixation_min_ms/(1000/expInfo['frameRate']),0)
        fixation_max_frames = round(fixation_max_ms/(1000/expInfo['frameRate']),0)
        FeedbackDur_frames =  round(FeedbackDur_ms/(1000/expInfo['frameRate']),0)
        ISI_min_frames = round(ISI_min_ms/(1000/expInfo['frameRate']),0)
        ISI_max_frames = round(ISI_max_ms/(1000/expInfo['frameRate']),0)

        #Initializes stimuli parameters of the experiment save for stimuli
        #position. Stimuli durations are in millisecond units (subsequently
        #converted to frames) while sizes are in visual angle degree units
        #at screen center. Note: monitor framerate is recorded directly from
        #the screen at the start of the experiment and used to calculate
        #actual frame durations.

        import psychopy.core
        clock = psychopy.core.Clock()
  Routine Block_End_Test
    CodeComponent Trial_End_Code
      Begin Routine:
        trials.addData('lenarray', len(trialarray))
        trials.addData('trialnum', trialnum)
        trials.addData('Go_too_slow_N', Go_too_slow_N)

        if trialnum == totaltrialnumber:
            trials.finished=1

        if SSD_SOA_Frames < 0:
            SSD_SOA_Frames = 0

        if SSD_SOA_Frames > 39:
            SSD_SOA_Frames = 39
      Each Frame:
        if text.status == FINISHED:
            continueRoutine = False
    TextComponent text
      stopVal [duration (frames)] = ISI_dur
      durationEstim = 1.2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Start_Instructions
  LoopInitiator Block_Loop loopType="TrialHandler"
    conditionsFile = Blocked_Conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block_Condition', u'SSD_Block1'), ('NGo_Trials', 30), ('NSSD_Trials', 10), ('Block_Instructions', u'A set of practice trials will be begin in 10 seconds.\n'), ('Block_Instructions_dur', 7)]),
      OrderedDict([('Block_Condition', u'SSD_Block2'), ('NGo_Trials', 48), ('NSSD_Trials', 16), ('Block_Instructions', u'The first set of real trials will begin  in 30 seconds'), ('Block_Instructions_dur', 27)]),
      OrderedDict([('Block_Condition', u'SSD_Block3'), ('NGo_Trials', 48), ('NSSD_Trials', 16), ('Block_Instructions', u'The next set of trials will begin in 30 seconds'), ('Block_Instructions_dur', 27)]),
      OrderedDict([('Block_Condition', u'SSD_Block4'), ('NGo_Trials', 48), ('NSSD_Trials', 16), ('Block_Instructions', u'The next set of trials will begin in 30 seconds'), ('Block_Instructions_dur', 27)]),
      OrderedDict([('Block_Condition', u'SSD_Block5'), ('NGo_Trials', 48), ('NSSD_Trials', 16), ('Block_Instructions', u'The next set of trials will begin in 30 seconds'), ('Block_Instructions_dur', 27)]),
      OrderedDict([('Block_Condition', u'SSD_Block5'), ('NGo_Trials', 48), ('NSSD_Trials', 16), ('Block_Instructions', u'The final set of trials will begin in 30 seconds'), ('Block_Instructions_dur', 27)])]
    Routine Block_Initializer
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = (NGo_Trials * 2) + NSSD_Trials
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      Routine Trial_initalizer
      Routine trial
      Routine feedback
      Routine Block_End_Test
    LoopTerminator trials
  LoopTerminator Block_Loop
  Routine End_Instructions
