PsychoPy2experiment version="1.90.3"
Settings
  Monitor = Real_Monitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  expName = T1_T2_800ms
  Screen = 2
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Routines
  Routine b'break_2'
    TextComponent text_5
      text = Take a quick 30-second break!
      stopVal [duration (s)] = $textduration1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      text = Get ready!
      stopVal [duration (s)] = $textduration2
      startVal [time (s)] = $textduration1
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        if trials.thisRepN == 40:
            textduration1 = 27
            textduration2 = 3
        else:
            textduration1 = 0
            textduration2 = 0
  Routine End_Task
    TextComponent text_2
      text = Good job! You have completed this task. Please inform the researcher for further instructions. 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent Task_Ender
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine block_start_wait
    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      text = Get Ready!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent Gray_Square_2
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.3, 0.3)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 3
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  Routine Trial_Example
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $Trial_example
      size = (1, 1)
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    KeyboardComponent Trial_starter
      forceEndRoutine = True
      allowedKeys = 'slash'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent Gray_Square
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.6, 0.6)
      fillColor = $[0.506,0.506,0.506]
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    TextComponent T1_text
      color = $[1.000,-1.000,-1.000]
      text [set every repeat] = $T1
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent T1_Delay
      stopVal [duration (s)] = 0.80
      durationEstim = 0.80
      startVal [time (s)] = 0.1
      letterHeight = 0.1
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    TextComponent T2_text
      color = $[1.000,-1.000,-1.000]
      text [set every repeat] = $T2
      durationEstim = 0.1
      startVal [condition] = $T1_Delay.status == FINISHED
      letterHeight = 0.1
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    KeyboardComponent T2_Resp
      correctAns = $T2corr_resp
      storeCorrect = True
      forceEndRoutine = True
      startVal [condition] = $T2_text.status == STARTED
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  Routine ISI
    PolygonComponent Gray_Square3
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.6, 0.6)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = $ISI_Dur
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    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      text = +
      stopVal [duration (s)] = $ISI_Dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Routine:
        ISI_Dur = 1 + random()*1
  Routine Trial_Creator
    CodeComponent code
      Begin Routine:
        T1code = randint(1,4)
        T2code = randint(1,3)

        if T1code == 1:
            T1 = 'X'
            T1corr_resp = 'bracketleft'
            trials.addData('T1', 'X')

        if T1code == 2:
            T1 = 'Y'
            T1corr_resp = 'bracketright'
            trials.addData('T1', 'Y')

        if T1code == 3:
            T1 = '#'
            T1corr_resp = 'none'
            trials.addData('T1', '#')


        if T2code == 1:
            T2 = '1'
            T2corr_resp = 'left'
            trials.addData('T2', '1')

        if T2code == 2:
            T2 = '2'
            T2corr_resp = 'right'
            trials.addData('T2', '2')
  Routine A_B_query
    PolygonComponent Gray_Square2
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.6, 0.6)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = $stim_dur
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    TextComponent X_or_Y
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = $stim_dur
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        X "[" key
           or
        Y "]" key)?
    CodeComponent code_2
      Begin Routine:
        if T1 == '#':
            continueRoutine = False

        if Block_type == 'Ignore_T1':
            continueRoutine = False

        else:
            stim_dur = 999
    KeyboardComponent T1_Resp
      correctAns = $T1corr_resp
      storeCorrect = True
      stopVal [duration (s)] = $stim_dur
      forceEndRoutine = True
      allowedKeys = 'bracketleft', 'bracketright'
      startVal [condition] = X_or_Y.status == STARTED
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  Routine Instructions
    TextComponent text
      text [set every repeat] = $Task_Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent Task_Starter
      forceEndRoutine = True
      allowedKeys = 'z'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator Block loopType="TrialHandler"
    conditionsFile = Blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Task_Instructions', u'In the upcoming task, you will be presented with a series of numbers and letters and will be asked to respond only to the numbers. Press the spacebar to view an example of how the trials in this stage of the experiment will proceed.'), ('Block_type', u'Ignore_T1')]),
      OrderedDict([('Task_Instructions', u'In the upcoming task, you will be presented with a series of numbers and letters. This time however, you will be asked to respond to both. Press the spacebar to view an example of how the trials in this stage of the experiment will proceed.'), ('Block_type', u'Remember_T1')])]
    Routine Instructions
    Routine Trial_Example
    Routine block_start_wait
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = TrialNumber
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      Routine ISI
      Routine Trial_Creator
      Routine Trial
      Routine A_B_query
    LoopTerminator trials
  LoopTerminator Block
  Routine End_Task
